PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'taskVer': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1088, 614]
  expName = nBackNewAlpha3
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Routines
  Routine trial
    KeyboardComponent trialResp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent trialGrid
      image = grid.png
      opacity [set every frame] = gridOpac
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent trialSquare
      fillColor = $[1,1,1]
      pos [set every repeat] = (loc1, loc2)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent trialFix
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent greenGrid
      image = gridGreen.png
      opacity [set every frame] = greenOpac
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent redGrid
      image = gridRed.png
      opacity [set every frame] = redOpac
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Routine:
        gridOpac = 1
        greenOpac = 0
        redOpac = 0
        keyPressed = []
      Each Frame:
        keyPressed = event.getKeys(keyList=['space'])
        trialCheck.text = keyPressed
        if corrAns == 'space' and not(keyPressed == []):
            gridOpac = 0
            greenOpac = 1
        if not(corrAns == 'space') and not(keyPressed == []):
            gridOpac = 0
            redOpac = 1
    TextComponent trialCheck
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine setup
    CodeComponent JSFix
      Code Type = Auto->JS
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    CodeComponent setupCode
      Code Type = Auto->JS
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      Begin Experiment:
        taskVer = int(expInfo['taskVer'])
        if taskVer == 1:
            order = [0,1,2]
  Routine instr
    TextComponent instrText
      letterHeight = 0.05
      pos = (-0.3,0)
      startVal [time (s)] = 0.0
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    KeyboardComponent instrResp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent instrImg
      image = None
      pos [set every repeat] = (0, 0)
      size = (1, 1)
      startVal [time (s)] = 0.0
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    CodeComponent instrCode
      Code Type = Auto->JS
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      Begin Routine:
        if condsFile == "nBack1Cond.xlsx":
            instrImg.pos = (0.5, -0.3)
            instrImg.image = '1back.png'
            instrText.text = "In this task you will be required to press ‘space’ if the white square appeared in the same location as the location on the last trial. For example if the square was in the left down corner on trial 1 and then it appeared in the same location on trial 2, press ‘space’. Otherwise, do not respond. Press ‘s’ to continue."
        elif condsFile == "nBack2Cond.xlsx":
            instrImg.pos = (0.5, -0.15)
            instrImg.image = '2back.png'
            instrText.text = "This is the end of 1-back trials. You are about to start 2-back trials. This means that instead of pressing ‘space’ whenever the square appears in the same position as on the position on one trial before, you are required to press ‘space’ whenever the square appears in the same position as on the position two trials before. For example if the square appeared in left down corner on trial 1, you should press ‘space’ if the square appears in the left down corner on trial 3. Press ‘s’ to continue."
        elif condsFile == "nBack3Cond.xlsx":
            instrImg.pos = (0.5, 0)
            instrImg.image = '3back.png'
            instrText.text = "This is the end of 2-back trials. You are about to start 3-back trials. This means that instead of pressing ‘space’ whenever the square appears in the same position as on the position on two trials before, you are required to press ‘space’ whenever the square appears in the same position as on the position three trials before. For example if the square appeared in left down corner on trial 1, you should press ‘space’ if the square appears in the left down corner on trial 4. Press ‘s’ to continue."
        else:
            instrImg.pos = (0.5, 0)
            instrImg.image = '3back.png'
            instrText.text = "This is the end of 2-back trials. You are about to start 3-back trials. This means that instead of pressing ‘space’ whenever the square appears in the same position as on the position on two trials before, you are required to press ‘space’ whenever the square appears in the same position as on the position three trials before. For example if the square appeared in left down corner on trial 1, you should press ‘space’ if the square appears in the left down corner on trial 4. Press ‘s’ to continue."
  Routine end
    TextComponent endText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of the experiment. Thank you for your time. Please remember to return to the questionnaire to carry on with the study. Press ‘space’ to exit.
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    KeyboardComponent endResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setup
  LoopInitiator taskLoop loopType="TrialHandler"
    Selected rows = $order
    conditionsFile = taskCond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'nBack1Conds.xlsx')]),
      OrderedDict([('condsFile', 'nBack2Conds.xlsx')]),
      OrderedDict([('condsFile', 'nBack3Conds.xlsx')])]
    Routine instr
    LoopInitiator trialsLoop loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator trialsLoop
  LoopTerminator taskLoop
  Routine end
